CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^Well(?P<Well>.*)_Channel(?P<Channel>.*)_Thijs_Seq(?P<WellNo>.*)_XY(?P<Position>.*)_AGP_Thijs.tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "AGP")
    Name to assign these images:RFN
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:RFN
    Name the output image:IllumRFN
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:RFN
    Name the output image:CorrRFN
    Select the illumination function:IllumRFN
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:CorrRFN
    Name the output image:EnhancedRFN
    Select the operation:Enhance
    Feature size:30
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:EnhancedRFN
    Name the primary objects to be identified:Clusters
    Typical diameter of objects, in pixel units (Min,Max):1,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:50
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.02,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ExpandOrShrinkObjects:[module_num:9|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
    Select the input objects:Clusters
    Name the output objects:ExpandedClusters
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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
MaskImage:[module_num:10|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notes:['Here, the mask is inverted so that only the pixels outside of the objects is considered in the measurent modules.']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
    Select the input image:EnhancedRFN
    Name the output image:MaskFibronectinInverted
    Use objects or an image as a mask?:Objects
    Select object for mask:ExpandedClusters
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    Invert the mask?:Yes

MeasureColocalization:[module_num:11|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
    Select images to measure:EnhancedRFN, MaskFibronectinInverted
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:12|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
    Select images to measure:EnhancedRFN, MaskFibronectinInverted
    Measure within objects?:No
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    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureImageAreaOccupied:[module_num:13|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Clusters, ExpandedClusters

MeasureImageIntensity:[module_num:14|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
    Select images to measure:CorrRFN, EnhancedRFN, MaskFibronectinInverted, RFN
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureImageQuality:[module_num:15|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:RFN
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:Clusters, ExpandedClusters
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ImageMath:[module_num:17|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
    Operation:Log transform (base 2)
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ContrastEnhancedImage
    Image or measurement?:Image
    Select the first image:EnhancedRFN
    Multiply the first image by:20
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    Image or measurement?:Image
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
ImageMath:[module_num:18|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
    Operation:Log transform (base 2)
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ContrastEnhancedMaskedImage
    Image or measurement?:Image
    Select the first image:MaskFibronectinInverted
    Multiply the first image by:20
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    Image or measurement?:Image
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
OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ContrastEnhancedImage
    Name the output image:OverlayOriginalObjects
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:yellow
    Select objects to display:Clusters

OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ContrastEnhancedImage
    Name the output image:OverlayExpandedObjects
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:yellow
    Select objects to display:ExpandedClusters

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:ContrastEnhancedImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:RFN
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:A
    Saved file format:png
    Output file location:Elsewhere...|D:\\Analysis 22-06-24\\Images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:OverlayOriginalObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:RFN
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:B
    Saved file format:png
    Output file location:Elsewhere...|D:\\Analysis 22-06-24\\Images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:OverlayExpandedObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:RFN
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:C
    Saved file format:png
    Output file location:Elsewhere...|D:\\Analysis 22-06-24\\Images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:ContrastEnhancedMaskedImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:RFN
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:D
    Saved file format:png
    Output file location:Elsewhere...|D:\\Analysis 22-06-24\\Images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToDatabase:[module_num:25|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Elsewhere...|D:\\Analysis 22-06-24
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:96
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    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:BackgroundSignalFibronectin
    Which objects should be used for locations?:Clusters
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Data only
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Image
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:26|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\Analysis 22-06-24
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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